
// ----- Helper Functions -----
function startsWith(str, prefix) {
    result = substring(str, 0, lengthOf(prefix));
    if (result == prefix)
        return 1;
    else
        return 0;
}

function endsWith(str, suffix) {
    result = substring(str, lengthOf(str) - lengthOf(suffix), lengthOf(str));
    if (result == suffix)
        return 1;
    else
        return 0;
}

// ----- Set Parent Directories -----
roiParent = "/Volumes/NX-01-A/2025-05-07_test_analysis/ROIs/";
rawDataParent = "/Volumes/NX-01-A/2025-05-07_test_analysis/raw_data/";
outputParent = "/Volumes/NX-01-A/2025-05-07_test_analysis/cells/";


// Ensure trailing slashes for path concatenation
if (!endsWith(roiParent, "/")) roiParent = roiParent + "/";
if (!endsWith(rawDataParent, "/")) rawDataParent = rawDataParent + "/";
if (!endsWith(outputParent, "/")) outputParent = outputParent + "/";

print("ROI directory: " + roiParent);
print("Raw data directory: " + rawDataParent);
print("Output directory: " + outputParent);

// Get list of dish directories in the ROIs parent folder.
dishes = getFileList(roiParent);
print("Found " + dishes.length + " entries in ROI parent directory");

for (d = 0; d < dishes.length; d++) {
    dishName = dishes[d];
    print("Checking entry: " + dishName);
    
    // Skip hidden files and non-directories
    if (startsWith(dishName, ".") || !File.isDirectory(roiParent + dishName)) {
        print("Skipping " + dishName + " (not a directory or hidden)");
        continue;
    }
    
    roiFolder = roiParent + dishName;
    // Ensure trailing slash
    if (!endsWith(roiFolder, "/")) roiFolder = roiFolder + "/";
    
    // Get all subdirectories in the raw data condition directory
    conditionFolder = rawDataParent + dishName;
    if (!File.exists(conditionFolder)) {
        print("Raw data condition directory not found: " + conditionFolder);
        continue;
    }
    
    print("Looking for subdirectories in: " + conditionFolder);
    subdirs = getFileList(conditionFolder);
    
    // Process each subdirectory
    for (s = 0; s < subdirs.length; s++) {
        subdir = subdirs[s];
        // Skip non-directories and hidden folders
        if (!File.isDirectory(conditionFolder + "/" + subdir) || indexOf(subdir, ".") == 0) {
            continue;
        }
        
        // Full path to the subdirectory
        regionFolder = conditionFolder + "/" + subdir;
        print("Processing subdirectory: " + regionFolder);
        
        // Ensure trailing slash
        if (!endsWith(regionFolder, "/")) regionFolder = regionFolder + "/";
        
        // Get the list of ROI files in this dish folder.
        print("Looking for ROI files in: " + roiFolder);
        roiFiles = getFileList(roiFolder);
        print("Found " + roiFiles.length + " files in ROI folder");
        
        // Try different ROI file prefixes
        prefixes = newArray("ROIs_R_", "ROIs_");
        
        for (r = 0; r < roiFiles.length; r++) {
            fileName = roiFiles[r];
            print("Checking file: " + fileName);
            
            // Skip non-zip files
            if (!endsWith(fileName, "_rois.zip") && !endsWith(fileName, ".zip")) {
                print("Skipping non-zip file: " + fileName);
                continue;
            }
            
            // Try to match any of our prefixes
            foundPrefix = false;
            prefixUsed = "";
            
            for (p = 0; p < prefixes.length; p++) {
                if (startsWith(fileName, prefixes[p])) {
                    foundPrefix = true;
                    prefixUsed = prefixes[p];
                    break;
                }
            }
            
            if (!foundPrefix) {
                print("No matching prefix for: " + fileName);
                continue;
            }
            
            // Derive the base name by removing the prefix and trailing "_rois.zip"
            baseName = "";
            if (endsWith(fileName, "_rois.zip")) {
                baseName = substring(fileName, lengthOf(prefixUsed), indexOf(fileName, "_rois.zip"));
            } else if (endsWith(fileName, ".zip")) {
                baseName = substring(fileName, lengthOf(prefixUsed), indexOf(fileName, ".zip"));
            }
            
            print("Base name: " + baseName);
            
            // Try different possible filenames - with and without R_ prefix
            possibleBaseNames = newArray(2);
            possibleBaseNames[0] = baseName;
            possibleBaseNames[1] = "R_" + baseName;
            
            // Try different image extensions
            extensions = newArray(".tif", ".tiff", ".TIF", ".TIFF");
            regionImagePath = "";
            
            // Get a list of subdirectories in the region folder
            print("Checking subdirectories in region folder: " + regionFolder);
            regionSubdirs = getFileList(regionFolder);
            
            // Try directly in the region folder first
            for (n = 0; n < 2; n++) {
                for (e = 0; e < extensions.length; e++) {
                    testPath = regionFolder + possibleBaseNames[n] + extensions[e];
                    print("Trying image path: " + testPath);
                    
                    if (File.exists(testPath)) {
                        regionImagePath = testPath;
                        print("Found image: " + regionImagePath);
                        break;
                    }
                }
                if (regionImagePath != "") break;  // Stop if we found an image
            }
            
            // If not found directly, try in each subdirectory
            if (regionImagePath == "") {
                print("Image not found directly, checking subdirectories...");
                
                for (sd = 0; sd < regionSubdirs.length; sd++) {
                    subdir = regionSubdirs[sd];
                    
                    // Skip non-directories and hidden folders
                    if (!File.isDirectory(regionFolder + subdir) || indexOf(subdir, ".") == 0) {
                        continue;
                    }
                    
                    print("Checking in subdirectory: " + subdir);
                    subdirPath = regionFolder + subdir;
                    // Ensure trailing slash
                    if (!endsWith(subdirPath, "/")) subdirPath = subdirPath + "/";
                    
                    for (n = 0; n < 2; n++) {
                        for (e = 0; e < extensions.length; e++) {
                            testPath = subdirPath + possibleBaseNames[n] + extensions[e];
                            print("Trying image path: " + testPath);
                            
                            if (File.exists(testPath)) {
                                regionImagePath = testPath;
                                print("Found image: " + regionImagePath);
                                break;
                            }
                        }
                        if (regionImagePath != "") break;  // Stop if we found an image
                    }
                    if (regionImagePath != "") break;  // Stop if we found an image
                }
            }
            
            if (regionImagePath == "") {
                print("No matching image found for base name: " + baseName);
                continue;
            }
            
            // Extract the region identifier from the image path, not just the base name
            print("DEBUG - Analyzing for region using file path: " + regionImagePath);
            region = "";
            
            // First, try to extract the region from the actual image file path
            // This is more reliable than using just the base name
            if (indexOf(regionImagePath, "/R_1_") >= 0) {
                region = "R_1";
                print("DEBUG - Extracted R_1 from image path");
            } else if (indexOf(regionImagePath, "/R_2_") >= 0) {
                region = "R_2";
                print("DEBUG - Extracted R_2 from image path");
            } else if (indexOf(regionImagePath, "/R_3_") >= 0) {
                region = "R_3";
                print("DEBUG - Extracted R_3 from image path");
            } else if (indexOf(regionImagePath, "/R_4_") >= 0) {
                region = "R_4";
                print("DEBUG - Extracted R_4 from image path");
            } else {
                // Fallback to the existing pattern matching logic if needed
                print("DEBUG - Could not extract region from path, trying base name: " + baseName);
                
                // Add a more flexible pattern for region identification
                if (indexOf(baseName, "50min_Washout") >= 0) {
                    region = "50min_Washout";
                    print("DEBUG - Matched 50min_Washout pattern");
                } else if (indexOf(baseName, "TS1_50min") >= 0) {
                    region = "TS1_50min";
                    print("DEBUG - Matched TS1_50min pattern");
                } else if (indexOf(baseName, "TS2_50min") >= 0) {
                    region = "TS2_50min";
                    print("DEBUG - Matched TS2_50min pattern");
                } else if (indexOf(baseName, "R_1") >= 0 || indexOf(baseName, "1_") >= 0) {
                    region = "R_1";
                    print("DEBUG - Matched R_1 pattern");
                } else if (indexOf(baseName, "R_2") >= 0 || indexOf(baseName, "2_") >= 0) {
                    region = "R_2";
                    print("DEBUG - Matched R_2 pattern");
                } else if (indexOf(baseName, "R_3") >= 0 || indexOf(baseName, "3_") >= 0) {
                    region = "R_3";
                    print("DEBUG - Matched R_3 pattern");
                } else if (indexOf(baseName, "R_4") >= 0 || indexOf(baseName, "4_") >= 0) {
                    region = "R_4";
                    print("DEBUG - Matched R_4 pattern");
                } else {
                    // If no pattern matches, use the entire base name as the region
                    region = baseName;
                    print("DEBUG - No region pattern match, using full base name: " + baseName);
                }
            }
            
            print("Identified region: " + region);
            
            // Determine the timepoint from the baseName.
            // Add debugging for timepoint matching
            print("DEBUG - Analyzing for timepoint: " + baseName);
            timepoint = "";
            timeLabel = "";
            
            if (indexOf(baseName, "t00") >= 0) {
                timepoint = "t00";
                timeLabel = "t00";
                print("DEBUG - Matched t00 timepoint");
            } else if (indexOf(baseName, "t03") >= 0) {
                timepoint = "t03";
                timeLabel = "t03";
                print("DEBUG - Matched t03 timepoint");
            } else {
                print("DEBUG - No explicit timepoint found, checking for timepoint_1 in folder structure");
                // Try to extract timepoint from folder structure if not in filename
                if (indexOf(regionFolder, "timepoint_1") >= 0) {
                    timepoint = "t00";  // Map timepoint_1 to t00
                    timeLabel = "t00";
                    print("DEBUG - Using t00 based on timepoint_1 folder");
                } else {
                    print("Timepoint not found in: " + baseName + " or folder structure");
                    continue;
                }
            }
            
            print("Identified timepoint: " + timepoint + " -> " + timeLabel);
            
            // Open the ROI Manager and load this ROI file.
            roiManager("Reset");
            roiFilePath = roiFolder + fileName;
            print("Opening ROI file: " + roiFilePath);
            roiManager("Open", roiFilePath);
            nRois = roiManager("count");
            print("Processing " + dishName + " " + region + " " + timeLabel + ": Found " + nRois + " ROIs.");
            
            if (nRois == 0) {
                print("No ROIs found in file: " + roiFilePath);
                continue;
            }
            
            // Open the corresponding region image
            print("Opening image: " + regionImagePath);
            open(regionImagePath);
            regionTitle = getTitle();
            print("Opened region image: " + regionTitle + " (" + regionImagePath + ")");
            
            // Set up the output folder for processed cells.
            outputFolder = outputParent + dishName + "/" + region + "_" + timeLabel + "/";
            print("Output folder for cells: " + outputFolder);
            if (!File.exists(outputFolder)) {
                print("Creating output directory: " + outputFolder);
                File.makeDirectory(outputFolder);
            }
            
            // Loop over each ROI in the ROI Manager.
            for (i = 0; i < nRois; i++) {
                // Duplicate the region image so the original remains unaltered.
                selectWindow(regionTitle);
                run("Duplicate...", "title=TempRegion duplicate");
                
                // Apply the ROI (from the ROI Manager) to the duplicate.
                roiManager("select", i);
                nslices = nSlices();
                for (s = 1; s <= nslices; s++) {
                    setSlice(s);
                    run("Clear Outside");
                }
                
                // Build the save path and filename.
                cellNum = i + 1;
                savePath = outputFolder + "CELL" + cellNum + ".tif";
                print("Saving cell " + cellNum + " to: " + savePath);
                saveAs("Tiff", savePath);
                
                // Close the duplicate image.
                close();
            }
            
            // Close the original region image and reset ROI Manager.
            selectWindow(regionTitle);
            close();
            roiManager("Reset");
        }
    }
}
print("Completed extracting individual cells");

// Close ImageJ when done
eval("script", "System.exit(0);");
